<Configuration>
    <Server
        maxThreads="20"
        port="1080"/>
    <Pipeline name="DICOM De-identification to Local Storage">
        <ArchiveImportService
            acceptFileObjects="no"
            acceptXmlObjects="no"
            acceptZipObjects="no"
            class="org.rsna.ctp.stdstages.ArchiveImportService"
            expandTARs="no"
            fsName="DICOM Image Directory"
            name="ArchiveImportService"
            quarantine="quarantines/ArchiveImportService"
            root="roots/ArchiveImportService"
            treeRoot="archive"/>
        <DicomImportService
            class="org.rsna.ctp.stdstages.DicomImportService"
            logConnections="no"
            name="DicomImportService"
            port="7777"
            quarantine="quarantines/DicomImportService"
            root="roots/DicomImportService"/>
        <HttpImportService
            acceptFileObjects="no"
            acceptXmlObjects="no"
            acceptZipObjects="no"
            class="org.rsna.ctp.stdstages.HttpImportService"
            logConnections="no"
            name="HttpImportService"
            port="7778"
            quarantine="quarantines/HttpImportService"
            root="roots/HttpImportService"/>
        <DicomDecompressor
            class="org.rsna.ctp.stdstages.DicomDecompressor"
            name="DicomDecompressor"
            quarantine="quarantines/DicomDecompressor"
            root="roots/DicomDecompressor"
            script="scripts/DicomDecompressor.script"/>
        <DicomPixelAnonymizer
            class="org.rsna.ctp.stdstages.DicomPixelAnonymizer"
            name="DicomPixelAnonymizer"
            quarantine="quarantines/DicomPixelAnonymizer"
            root="roots/DicomPixelAnonymizer"
            script="scripts/DicomPixelAnonymizer.script"/>
        <IDMap
            class="org.rsna.ctp.stdstages.IDMap"
            name="IDMap"
            root="roots/IDMap"/>
        <DicomAnonymizer
            class="org.rsna.ctp.stdstages.DicomAnonymizer"
            lookupTable="scripts/LookupTable.properties"
            name="DicomAnonymizer"
            quarantine="quarantines/DicomAnonymizer"
            root="roots/DicomAnonymizer"
            script="scripts/DicomAnonymizer.script"/>
        <FileStorageService
            class="org.rsna.ctp.stdstages.FileStorageService"
            fsNameTag="00080050"
            name="FileStorageService"
            quarantine="quarantines/FileStorageService"
            returnStoredFile="no"
            root="/JavaPrograms/roots/FileStorageService"/>
    </Pipeline>
</Configuration>
